PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    TextComponent stroop_text
      startVal [time (s)] = 0
      color [set every repeat] = $color
      text [set every repeat] = $word
      letterHeight = 0.05
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    TextboxComponent btn_red
      startVal [time (s)] = 0
      size = [0.5,0.5]
      pos = (-0.3, -0.3)
      editable = False
      text = สีแดง
      letterHeight = 0.05
      lineSpacing = 1
      bold = False
      formattingSyntax = md
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    TextboxComponent btn_blue
      startVal [time (s)] = 0
      size = [0.5,0.5]
      pos = (0.3, -0.3)
      editable = False
      text = สีน้ำเงิน
      letterHeight = 0.05
      lineSpacing = 1
      bold = False
      formattingSyntax = md
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    MouseComponent mouse
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      clickable = btn_red, btn_blue
      saveParamsClickable [set every repeat] = name,
      storeCorrect = True
      correctAns = corrAns
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Flow
  LoopTerminator trials
  LoopTerminator trials
  LoopTerminator trials
  LoopTerminator trials
  LoopTerminator trials
  LoopTerminator trials
  LoopTerminator trials
  LoopTerminator trials
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = conditions.xlsx
    nReps = 5
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
